[
    {
        "object.className": "ProtImportTsMovies",
        "object.id": "2",
        "object.label": "tomo - import tilt-series movies",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "filesPath": "/home/adacapito/TomoTuto_byME/",
        "filesPattern": "Position*.mdoc",
        "isTomo5": false,
        "exclusionWords": null,
        "mdocInfo": null,
        "anglesFrom": 0,
        "importAction": 2,
        "voltage": 300.0,
        "sphericalAberration": 2.7,
        "amplitudeContrast": 0.1,
        "magnification": 50000,
        "samplingRate": 1.35,
        "tiltAxisAngle": -95.0,
        "doseInitial": 0.0,
        "dosePerFrame": null,
        "gainFile": null,
        "darkFile": null
    },
    {
        "object.className": "ProtTsMotionCorr",
        "object.id": "83",
        "object.label": "motioncorr - align tilt-series movies",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputTiltSeriesM": "2.outputTiltSeriesM",
        "alignFrame0": 1,
        "alignFrameN": 11,
        "useAlignToSum": true,
        "sumFrame0": 1,
        "sumFrameN": 0,
        "binFactor": 2.0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "cropDimX": 0,
        "cropDimY": 0,
        "splitEvenOdd": false,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "gpuList": "0",
        "patchX": 0,
        "patchY": 0,
        "patchOverlap": 0,
        "group": 1,
        "groupLocal": 4,
        "tol": 0.2,
        "extraParams2": "",
        "gainRot": 0,
        "gainFlip": 0,
        "defectFile": null,
        "defectMap": null,
        "EERtext": null,
        "eerGroup": 32,
        "eerSampling": 0,
        "doMagCor": false,
        "scaleMaj": 1.0,
        "scaleMin": 1.0,
        "angDist": 0.0
    },
    {
        "object.className": "CistemProtTsCtffind",
        "object.id": "146",
        "object.label": "cistem - tilt-series ctffind",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputTiltSeries": "83.TiltSeries_2",
        "ctfDownFactor": 1.0,
        "windowSize": 512,
        "lowRes": 30.0,
        "highRes": 5.0,
        "minDefocus": 5000.0,
        "maxDefocus": 50000.0,
        "stepDefocus": 500.0,
        "slowSearch": false,
        "fixAstig": true,
        "astigmatism": 200.0,
        "findPhaseShift": false,
        "minPhaseShift": 0.0,
        "maxPhaseShift": 180.0,
        "stepPhaseShift": 10.0,
        "hostName": "localhost",
        "numberOfThreads": 3,
        "numberOfMpi": 1,
        "measureTilt": false,
        "measureThickness": false,
        "search1D": true,
        "refine2D": true,
        "lowResNodes": 30.0,
        "highResNodes": 3.0,
        "useRoundedSquare": false,
        "downweightNodes": false
    },
    {
        "object.className": "ProtImodCtfCorrection",
        "object.id": "230",
        "object.label": "imod - CTF correction",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputSetOfTiltSeries": "271.TiltSeries",
        "inputSetOfCtfTomoSeries": "146.CTFs",
        "defocusTol": 200,
        "interpolationWidth": 15,
        "useGpu": true,
        "gpuList": "0",
        "processOddEven": false
    },
    {
        "object.className": "ProtImodXcorrPrealignment",
        "object.id": "271",
        "object.label": "imod - Coarse prealignment",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputSetOfTiltSeries": "83.TiltSeries_2",
        "cumulativeCorr": false,
        "computeAlignment": true,
        "binning": 1,
        "Trimming parameters": null,
        "tiltAxisAngle": null,
        "pxTrim": "40 40",
        "xmin": null,
        "xmax": null,
        "ymin": null,
        "ymax": null,
        "filterRadius1": 0.0,
        "filterSigma1": 0.03,
        "filterRadius2": 0.25,
        "filterSigma2": 0.05
    }
]